PsychoPy2experiment version="2026.1.0"
Settings
  expName = posner_task
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    CodeComponent trialCode
      Code Type = Py
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      Begin Routine:
        soa = np.random.uniform(0.2, 0.6)   # jittered SOA, 200-600 ms
        thisExp.addData('soa', soa) # writes soa + its value in the output data file

        # onset times (all relative to trial routine start t=0)
        fix_dur   = 0.5
        cue_onset = fix_dur
        cue_dur   = 0.1
        target_onset = cue_onset + cue_dur + soa

        # initalise / reset flags
        fix_sent = False
        cue_sent = False
        target_sent = False
      Each Frame:
        # Each frame check if the timer has passed the onset time of that event
        # if so, send the trigger and set the flag to true to avoid consequtive triggers this routine
        if not fix_sent and t >= 0:
            send_trigger('FIX_ONSET')
            fix_sent = True
        if not cue_sent and t >= cue_onset:
            send_trigger('CUE_LEFT' if cueSide == 'left' else 'CUE_RIGHT')
            cue_sent = True
        if not target_sent and t >= target_onset:
            send_trigger('TARGET_LEFT' if targetSide == 'left' else 'TARGET_RIGHT')
            target_sent = True
      End Routine:
        # If a key is pressed:
        if respTrial.keys:
            # is_correct = 1 if the key pressed matches the side the target appeared, else 0
            is_correct = 1 if ((respTrial.keys == 'left' and targetSide == 'left') or
                              (respTrial.keys == 'right' and targetSide == 'right')) else 0
            send_trigger('RESPONSE_CORRECT' if is_correct == 1 else 'RESPONSE_INCORRECT')
            thisExp.addData('correct', is_correct)
            thisExp.addData('rt', respTrial.rt)
        # Else: no key is pressed before the routine ended => l
        else:
            # write incorrect trial and empty response
            thisExp.addData('correct', 0)
            thisExp.addData('rt', '')
            send_trigger('RESPONE_TIMEOUT')
    ImageComponent fixation
      startVal [time (s)] = 0
      size = SIZE_X_Y
      image = posner/fixation_cross.png
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    ImageComponent boxLeft
      startVal [time (s)] = 0
      size = SIZE_X_Y
      pos = -X_COORD,0
      image = posner/box.png
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    ImageComponent boxRight
      startVal [time (s)] = 0
      size = SIZE_X_Y
      pos = X_COORD,0
      image = posner/box.png
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    ImageComponent cue
      startVal [time (s)] = $cue_onset
      stopVal [duration (s)] = $cue_dur
      size = SIZE_X_Y
      pos [set every repeat] = (0, Y_COORD) if cueType=='endogenous' else ((-X_COORD,0) if cueSide=='left' else (X_COORD,0))
      image [set every repeat] = $cueFile
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    ImageComponent target
      startVal [time (s)] = $target_onset
      size = SIZE_X_Y
      pos [set every repeat] = $(-X_COORD,0) if targetSide=='left' else (X_COORD,0)
      image [set every repeat] = posner/target_dot.png
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    KeyboardComponent respTrial
      startVal [time (s)] = $target_onset
      stopVal [duration (s)] = 1.5
      forceEndRoutine = True
      allowedKeys = 'left','right'
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  Routine ITI
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    CodeComponent itiCode
      Code Type = Auto->JS
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      Begin Routine:
        send_trigger('ITI_ONSET')
    ImageComponent blank
      startVal [time (s)] = 0
      stopVal [duration (s)] = $np.random.uniform(0.8,1.2)
      size = [0.5,0.5]
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  Routine setup
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    CodeComponent setupCode
      Code Type = Py
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      Begin Experiment:
        X_COORD = 0.5   # x-coordinate (height units) for boxes, exogenous cue, and target
        Y_COORD = 0.25  # y-coordinate (height units) for endogenous cue
        SIZE_X_Y = (0.3, 0.3) # Size of elements displayed

        # numeric trigger codebook: tens digit = event type, ones digit = detail.
        # This is what actually goes out over the wire (e.g. as a parallel-port
        # byte) — the string label is kept alongside purely for human-readable
        # log entries, it's never sent to hardware itself.
        TRIGGER_CODES = {
            'FIX_ONSET':          0,   # fixation onset, no detail needed
            'CUE_LEFT':          11,   # cue onset, cued side = left
            'CUE_RIGHT':         12,   # cue onset, cued side = right
            'TARGET_LEFT':       21,   # target onset, target on left
            'TARGET_RIGHT':      22,   # target onset, target on right
            'RESPONSE_INCORRECT': 30,  # response given, wrong key
            'RESPONSE_CORRECT':   31,  # response given, correct key
            'RESPONSE_TIMEOUT':   32,  # no response within the timeout window
            'ITI_ONSET':          40,  # inter-trial interval begins
        }

        # Setup trigger file + write header
        trigger_log_path = os.path.join(thisExp.dataFileName + '_triggers.csv') # use psychopy's own data filename as base with _triggers.csv suffix
        trigger_log = open(trigger_log_path, 'a') # open the file in append mode
        trigger_log.write('timestamp,code,label,trial_n\n') # write the header once before any trigger rows are added

        def send_trigger(label):
            """Stub trigger sender function with the assumption that no hardware is attached.
            It logs the numeric code + label of the trigger write the triggers to the trigger file instead together with a timestamp and trial number

            INPUT:
             label (str): label of the trigger that will be logged
            """
            code = TRIGGER_CODES[label]
            timestamp = core.getTime()

            # write timestamp, label, trialnumber ()
            trigger_log.write(f'{timestamp:.6f},{code},{label},{globals().get("thisN", -1)}\n') # globals().get("thisN", -1) ensures that the value falls back safely to -1 instead of giving an error
            trigger_log.flush() # flush => writes row to disk immediately

            # Write to PsychoPy's built-in logging too
            logging.exp(f'CODE: {code} TRIGGER: ({label}) TIMESTAMP: {timestamp:.6f}')
  Routine end
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    TextComponent endText
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text:
        Thanks for participating!

        Press any key to exit.
    KeyboardComponent endResp
      startVal [time (s)] = 0
      forceEndRoutine = True
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  Routine instructions
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    TextComponent instructionsText
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text:
        Task instructions:
        Focus on the + mark while the trial starts. A cue will appear.
        WAIT UNTIL THE DOT APPEARS.

        Press the LEFT arrow key if the target dot appears on the left.
        Press the RIGHT arrow key if the target dot appears on the right.

        Respond as quickly and accurately as you can.

        Press any key to begin.
    KeyboardComponent startResp
      startVal [time (s)] = 0
      forceEndRoutine = True
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Flow
  Routine setup
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    conditionsFile = conditions.xlsx
    nReps = 1
    conditions = []
    endPoints = [0,1]
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    Routine trial
    Routine ITI
  LoopTerminator trials
  Routine end
